PsychoPy2experiment version="2020.2.5"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = psychoPyE
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Routines
  Routine Instructions
    TextComponent welcome
      color = black
      letterHeight = 0.1
      pos = (0, 0.1)
      startVal [time (s)] = 0.0
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      text:
        Welcome to our trial
    KeyboardComponent instruction_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent instructions
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text:
        Please make sure your sound is switch on

        Press space to continue
  Routine Trial
    SoundComponent sound_sampl
      sound [set every repeat] = $soundSample
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      syncScreenRefresh = False
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  Routine Blank
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 0.3
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  Routine Thanks
    TextComponent thank
      letterHeight = 0.07
      startVal [time (s)] = 0.0
      text = Thank you for your participation to our trial
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    KeyboardComponent key_resp
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine Answer
    KeyboardComponent answer
      allowedKeys = 'ctrl+enter'
      discard previous = False
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextComponent Instruc
      letterHeight = 0.05
      pos = (0, 0.3)
      startVal [time (s)] = 0.0
      text = What do you think about this sound ?
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    ImageComponent button
      image = buttonContinue.png
      pos = (0.75, -0.35)
      size = (0.2,0.1)
      startVal [time (s)] = 0.0
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    MouseComponent mouse
      clickable = button
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    TextboxComponent textAnswers
      bold = False
      editable = True
      letterHeight = 0.05
      padding = None
      startVal [time (s)] = 0.0
      text [set every repeat] = Enter here...
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Flow
  Routine Instructions
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = samples.xlsx
    loopType = random
    nReps = 1
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    conditions:
      [OrderedDict([('sound_sample', '"héhé.wav"'), ('label', 'nostegano')]),
      OrderedDict([('sound_sample', '"héhé_stego.wav"'), ('label', 'stegano')])]
    Routine Trial
    Routine Blank
    Routine Answer
    Routine Blank
  LoopTerminator trials
  Routine Thanks
